[
    {
        "_useQueue": false, 
        "acquisitionWizard": null, 
        "amplitudeContrast": 0.1, 
        "copyFiles": false, 
        "darkFile": null, 
        "dataStreaming": true, 
        "deleteFrames": false, 
        "doseInitial": 0.1, 
        "dosePerFrame": 100.0, 
        "endTokenFile": null, 
        "fileTimeout": 15, 
        "filesPath": "/dls/m03/data/2017/em14704-2/raw/GridSquare*/Data", 
        "filesPattern": "*.mrc", 
        "gainFile": null, 
        "haveDataBeenPhaseFlipped": false, 
        "importFrom": 0, 
        "inputIndividualFrames": false, 
        "magnification": 47170, 
        "movieSuffix": "frames.mrcs", 
        "numberOfIndividualFrames": 32, 
        "object.className": "ProtImportMovies", 
        "object.comment": "", 
        "object.id": "937", 
        "object.label": "scipion - import movies", 
        "runMode": 0, 
        "runName": null, 
        "samplingRate": 1.06, 
        "samplingRateMode": 0, 
        "scannedPixelSize": 7.0, 
        "socketPort": 5000, 
        "sphericalAberration": 2.7, 
        "stackFrames": true, 
        "streamingSocket": false, 
        "timeout": 43200, 
        "voltage": 300.0, 
        "writeMoviesInProject": false
    }, 
    {
        "GPUIDs": "0", 
        "_useQueue": false, 
        "_useQueueForJobs": true, 
        "alignFrame0": 1, 
        "alignFrameN": 0, 
        "angDist": 0.0, 
        "binFactor": 1.0, 
        "computeAllFramesAvg": false, 
        "cropDimX": 0, 
        "cropDimY": 0, 
        "cropOffsetX": 0, 
        "cropOffsetY": 0, 
        "doApplyDoseFilter": true, 
        "doComputeMicThumbnail": true, 
        "doComputePSD": true, 
        "doMagCor": false, 
        "doSaveAveMic": true, 
        "doSaveMovie": false, 
        "doSaveUnweightedMic": true, 
        "extraParams": "", 
        "extraParams2": "", 
        "gpuMsg": "True", 
        "group": 1, 
        "hostName": "localhost", 
        "inputMovies": "937.outputMovies", 
        "numberOfMpi": 1, 
        "numberOfThreads": 10, 
        "object.className": "ProtMotionCorr", 
        "object.comment": "", 
        "object.id": "992", 
        "object.label": "motioncorr - motioncorr alignment", 
        "patchX": 5, 
        "patchY": 5, 
        "runMode": 0, 
        "runName": null, 
        "scaleMaj": 1.0, 
        "scaleMin": 1.0, 
        "sumFrame0": 1, 
        "sumFrameN": 0, 
        "tol": 0.5, 
        "useAlignToSum": true, 
        "useEst": true, 
        "useMotioncor2": true
    }, 
    {
        "EPAsmp": 4, 
        "GPUCore": 0, 
        "HighResBf": 50, 
        "HighResH": 4.0, 
        "HighResL": 15.0, 
        "_useQueue": false, 
        "_useQueueForJobs": true, 
        "astigmatism": 100.0, 
        "bfactor": 150, 
        "convsize": 85, 
        "ctfDownFactor": 1.0, 
        "doBasicRotave": false, 
        "doEPA": false, 
        "doHighRes": false, 
        "doPhShEst": false, 
        "doValidate": false, 
        "highRes": 0.35, 
        "inputMicrographs": "992.outputMicrographs", 
        "lowRes": 0.05, 
        "maxDefocus": 4.0, 
        "minDefocus": 0.25, 
        "object.className": "ProtGctf", 
        "object.comment": "", 
        "object.id": "1053", 
        "object.label": "gctf - CTF estimation on GPU", 
        "overlap": 0.5, 
        "phaseShiftH": 180.0, 
        "phaseShiftL": 0.0, 
        "phaseShiftS": 10.0, 
        "phaseShiftT": 0, 
        "plotResRing": true, 
        "recalculate": false, 
        "runMode": 0, 
        "runName": null, 
        "sqliteFile": null, 
        "windowSize": 512
    }, 
    {
        "_useQueue": false, 
        "astigmatism": 100.0, 
        "ctfDownFactor": 1.0, 
        "findPhaseShift": false, 
        "highRes": 0.35, 
        "hostName": "localhost", 
        "inputMicrographs": "992.outputMicrographs", 
        "lowRes": 0.05, 
        "maxDefocus": 4.0, 
        "maxPhaseShift": 3.15, 
        "minDefocus": 0.25, 
        "minPhaseShift": 0.0, 
        "numberOfMpi": 1, 
        "numberOfThreads": 2, 
        "object.className": "ProtCTFFind", 
        "object.comment": "", 
        "object.id": "1111", 
        "object.label": "grigoriefflab - ctffind", 
        "recalculate": false, 
        "resamplePix": true, 
        "runMode": 0, 
        "runName": null, 
        "sqliteFile": null, 
        "stepPhaseShift": 0.2, 
        "useCtffind4": true, 
        "windowSize": 512
    }, 
    {
        "_useQueue": false, 
        "astigmatism": 0.2, 
        "cpuAlert": 101.0, 
        "doMail": false, 
        "emailFrom": "from@from.fakeadress.com", 
        "emailTo": "to@to.fakeadress.com", 
        "inputProtocols": [
            "1111", 
            "937", 
            "992"
        ], 
        "maxDefocus": 40000.0, 
        "memAlert": 101.0, 
        "minDefocus": 1000.0, 
        "monitorTime": 30000.0, 
        "object.className": "ProtMonitorSummary", 
        "object.comment": "", 
        "object.id": "1157", 
        "object.label": "scipion - monitor summary", 
        "publishCmd": "", 
        "runMode": 0, 
        "runName": null, 
        "samplingInterval": 60, 
        "smtp": "smtp.fakeadress.com", 
        "swapAlert": 101.0
    }, 
    {
        "_useQueue": false, 
        "db": 0, 
        "inputProtocols": [
            "937", 
            "992", 
            "1111"
        ], 
        "object.className": "ProtMonitorISPyB", 
        "object.comment": "", 
        "object.id": "1203", 
        "object.label": "ispyb_monitor - monitor to ISPyB 2", 
        "runMode": 0, 
        "runName": null, 
        "samplingInterval": 60, 
        "visit": "somevisit"
    }, 
    {
        "GPUId": 0, 
        "_useQueue": false, 
        "_useQueueForJobs": true, 
        "advLabel": null, 
        "advanced": true, 
        "angStep": 5, 
        "boxSize": 128, 
        "exclusive": false, 
        "highPass": 1000, 
        "inputMicrographs": "992.outputMicrographsDoseWeighted", 
        "invertTemplatesContrast": false, 
        "localAvgDiam": 100, 
        "localAvgMax": 1.0, 
        "localAvgMin": -1.0, 
        "localSigmaCutoff": 1.2, 
        "localSigmaDiam": 100, 
        "lowPass": 30, 
        "minDist": 100.0, 
        "object.className": "ProtGautomatch", 
        "object.comment": "", 
        "object.id": "317", 
        "object.label": "gautomatch - auto-picking", 
        "particleSize": 100.0, 
        "preFilt": false, 
        "prehighPass": 1000, 
        "prelowPass": 8, 
        "runMode": 0, 
        "runName": null, 
        "speed": 2, 
        "threshold": 0.1, 
        "writeBg": false, 
        "writeBgSub": false, 
        "writeCC": false, 
        "writeFilt": false, 
        "writeMsk": false, 
        "writeSigma": false
    }, 
    {
        "_useQueue": false, 
        "_useQueueForJobs": false, 
        "configuration": "/dls_sw/apps/zocalo/secrets/credentials-em-archiving.cfg", 
        "dropFileDir": "/dls/bl-misc/dropfiles2/icat/dropZone/", 
        "inputMovies": "937.outputMovies", 
        "object.className": "ProtArchive", 
        "object.comment": "", 
        "object.id": "960", 
        "object.label": "dls - DLS Archive", 
        "runMode": 0, 
        "runName": null
    }
]