[
    {
        "object.className": "ProtImportMovies",
        "object.id": "937",
        "object.label": "scipion - import movies",
        "object.comment": "",
        "_useQueue": false,
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": "/dls/m03/data/2017/em14704-2/raw/GridSquare*/Data",
        "filesPattern": "*.mrc",
        "copyFiles": false,
        "haveDataBeenPhaseFlipped": false,
        "acquisitionWizard": null,
        "voltage": 300.0,
        "sphericalAberration": 2.7,
        "amplitudeContrast": 0.1,
        "magnification": 47170,
        "samplingRateMode": 0,
        "samplingRate": 1.06,
        "scannedPixelSize": 7.0,
        "doseInitial": 0.1,
        "dosePerFrame": 0.1,
        "gainFile": null,
        "darkFile": null,
        "dataStreaming": true,
        "timeout": 43200,
        "fileTimeout": 15,
        "endTokenFile": null,
        "inputIndividualFrames": false,
        "numberOfIndividualFrames": 32,
        "stackFrames": true,
        "writeMoviesInProject": false,
        "movieSuffix": "frames.mrcs",
        "deleteFrames": false,
        "streamingSocket": false,
        "socketPort": 5000
    },
    {
        "object.className": "ProtMotionCorr",
        "object.id": "992",
        "object.label": "motioncorr - motioncorr alignment",
        "object.comment": "",
        "_useQueue": false,
        "_useQueueForJobs": true,
        "runName": null,
        "runMode": 0,
        "gpuMsg": "True",
        "GPUIDs": "0",
        "alignFrame0": 1,
        "alignFrameN": 0,
        "useAlignToSum": true,
        "sumFrame0": 1,
        "sumFrameN": 0,
        "binFactor": 1.0,
        "cropOffsetX": 0,
        "cropOffsetY": 0,
        "cropDimX": 0,
        "cropDimY": 0,
        "doSaveAveMic": true,
        "doSaveMovie": false,
        "doComputePSD": true,
        "doComputeMicThumbnail": true,
        "computeAllFramesAvg": false,
        "extraParams": "",
        "useMotioncor2": true,
        "doApplyDoseFilter": true,
        "patchX": 5,
        "patchY": 5,
        "group": 1,
        "tol": 0.5,
        "doMagCor": false,
        "useEst": true,
        "scaleMaj": 1.0,
        "scaleMin": 1.0,
        "angDist": 0.0,
        "extraParams2": "",
        "doSaveUnweightedMic": true,
        "hostName": "localhost",
        "numberOfThreads": 10,
        "numberOfMpi": 1,
        "inputMovies": "937.outputMovies"
    },
    {
        "object.className": "ProtGctf",
        "object.id": "1053",
        "object.label": "gctf - CTF estimation on GPU",
        "object.comment": "",
        "_useQueue": false,
        "_useQueueForJobs": true,
        "runName": null,
        "runMode": 0,
        "recalculate": false,
        "sqliteFile": null,
        "ctfDownFactor": 1.0,
        "lowRes": 0.05,
        "highRes": 0.35,
        "minDefocus": 0.25,
        "maxDefocus": 4.0,
        "astigmatism": 100.0,
        "windowSize": 512,
        "plotResRing": true,
        "GPUCore": 0,
        "doEPA": false,
        "EPAsmp": 4,
        "doBasicRotave": false,
        "bfactor": 150,
        "overlap": 0.5,
        "convsize": 85,
        "doHighRes": false,
        "HighResL": 15.0,
        "HighResH": 4.0,
        "HighResBf": 50,
        "doValidate": false,
        "doPhShEst": false,
        "phaseShiftL": 0.0,
        "phaseShiftH": 180.0,
        "phaseShiftS": 10.0,
        "phaseShiftT": 0,
        "inputMicrographs": "992.outputMicrographs"
    },
    {
        "object.className": "ProtCTFFind",
        "object.id": "1111",
        "object.label": "grigoriefflab - ctffind",
        "object.comment": "",
        "_useQueue": false,
        "runName": null,
        "runMode": 0,
        "recalculate": false,
        "sqliteFile": null,
        "ctfDownFactor": 1.0,
        "useCtffind4": true,
        "astigmatism": 100.0,
        "findPhaseShift": false,
        "minPhaseShift": 0.0,
        "maxPhaseShift": 3.15,
        "stepPhaseShift": 0.2,
        "resamplePix": true,
        "lowRes": 0.05,
        "highRes": 0.35,
        "minDefocus": 0.25,
        "maxDefocus": 4.0,
        "windowSize": 512,
        "hostName": "localhost",
        "numberOfThreads": 2,
        "numberOfMpi": 1,
        "inputMicrographs": "992.outputMicrographs"
    },
    {
        "object.className": "ProtMonitorSummary",
        "object.id": "1157",
        "object.label": "scipion - monitor summary",
        "object.comment": "",
        "_useQueue": false,
        "runName": null,
        "runMode": 0,
        "inputProtocols": [
            "1111",
            "937",
            "992"
        ],
        "samplingInterval": 60,
        "maxDefocus": 40000.0,
        "minDefocus": 1000.0,
        "astigmatism": 0.2,
        "monitorTime": 30000.0,
        "cpuAlert": 101.0,
        "memAlert": 101.0,
        "swapAlert": 101.0,
        "doMail": false,
        "emailFrom": "from@from.fakeadress.com",
        "emailTo": "to@to.fakeadress.com",
        "smtp": "smtp.fakeadress.com",
        "publishCmd": ""
    },
    {
        "object.className": "ProtMonitorISPyB",
        "object.id": "1203",
        "object.label": "ispyb_monitor - monitor to ISPyB 2",
        "object.comment": "",
        "_useQueue": false,
        "runName": null,
        "runMode": 0,
        "inputProtocols": [
            "937",
            "992",
            "1111"
        ],
        "samplingInterval": 60,
        "visit": "somevisit",
        "db": 0
    },
    {                                                       
        "GPUId": 0,                                         
        "_useQueue": false,
        "_useQueueForJobs": true,
        "advLabel": null,
        "advanced": true,
        "angStep": 5,
        "boxSize": 128,
        "exclusive": false,
        "highPass": 1000,
        "inputMicrographs": "992.outputMicrographsDoseWeighted",
        "invertTemplatesContrast": false,
        "localAvgDiam": 100,
        "localAvgMax": 1.0,
        "localAvgMin": -1.0,
        "localSigmaCutoff": 1.2,
        "localSigmaDiam": 100,
        "lowPass": 30,
        "minDist": 300,
        "object.className": "ProtGautomatch",
        "object.comment": "",
        "object.id": "317",
        "object.label": "gautomatch - auto-picking",
        "particleSize": 250,
        "preFilt": false,
        "prehighPass": 1000,
        "prelowPass": 8,
        "runMode": 0,
        "runName": null,
        "speed": 2,
        "threshold": 0.1,
        "writeBg": false,
        "writeBgSub": false,
        "writeCC": false,
        "writeFilt": false,
        "writeMsk": false,
        "writeSigma": false
    },
    {
        "object.className": "ProtArchive",
        "object.id": "960",
        "object.label": "dls - DLS Archive",
        "object.comment": "",
        "_useQueue": false,
        "_useQueueForJobs": false,
        "runName": null,
        "runMode": 0,
        "configuration": "/dls_sw/apps/zocalo/secrets/credentials-em-archiving.cfg",
        "dropFileDir": "/dls/bl-misc/dropfiles2/icat/dropZone/",
        "inputMovies": "937.outputMovies"
    }
]
