[
 {
  "copyFiles": false,
  "socketPort": 5000,
  "acquisitionWizard": null,
  "amplitudeContrast": 0.1,
  "stackFrames": false,
  "runMode": 0,
  "voltage": 300.0,
  "movieSuffix": "frames.mrcs",
  "dataStreaming": false,
  "writeMoviesInProject": false,
  "fileTimeout": 30,
  "filesPath": "/dls/p45/data/2018/em11111-1/raw/GridSquare_*/Data",
  "scannedPixelSize": 7.0,
  "filesPattern": "Gr*.mrc",
  "object.label": "scipion - import movies",
  "magnification": "2000",
  "dosePerFrame": "10",
  "object.className": "ProtImportMovies",
  "darkFile": null,
  "gainFile": "/dls/ebic/data/staff-scratch/Joshua/test_full_set/Micrographs/SuperRef_GroEL_29-1_0000.mrc",
  "object.comment": "",
  "samplingRate": "1.3",
  "inputIndividualFrames": false,
  "runName": null,
  "_useQueue": false,
  "deleteFrames": false,
  "sphericalAberration": 2.7,
  "doseInitial": 0.0,
  "numberOfIndividualFrames": "10",
  "haveDataBeenPhaseFlipped": false,
  "streamingSocket": false,
  "timeout": 43200,
  "object.id": "937",
  "importFrom": 0
 },
 {
  "_useQueueForJobs": true,
  "hostName": "localhost",
  "extraParams": "",
  "runMode": 0,
  "useMotioncor2": true,
  "cropDimX": 0,
  "cropDimY": 0,
  "binFactor": 1.0,
  "doSaveMovie": false,
  "group": 1,
  "alignFrame0": 1,
  "doMagCor": false,
  "object.label": "motioncorr - motioncorr alignment",
  "gpuMsg": "True",
  "extraParams2": "",
  "doComputePSD": false,
  "tol": 0.5,
  "sumFrameN": 0,
  "object.className": "ProtMotionCorr",
  "scaleMaj": 1.0,
  "GPUIDs": "0",
  "sumFrame0": 1,
  "object.comment": "",
  "doApplyDoseFilter": true,
  "numberOfThreads": 2,
  "computeAllFramesAvg": false,
  "numberOfMpi": 1,
  "runName": null,
  "_useQueue": false,
  "scaleMin": 1.0,
  "alignFrameN": 0,
  "doComputeMicThumbnail": false,
  "patchX": 5,
  "patchY": 5,
  "angDist": 0.0,
  "useAlignToSum": true,
  "cropOffsetX": 0,
  "cropOffsetY": 0,
  "useEst": true,
  "doSaveAveMic": true,
  "inputMovies": "937.outputMovies",
  "doSaveUnweightedMic": true,
  "object.id": "992"
 },
 {
  "doHighRes": false,
  "_useQueueForJobs": true,
  "object.label": "gctf - CTF estimation on GPU",
  "runMode": 0,
  "doEPA": false,
  "overlap": 0.5,
  "recalculate": false,
  "GPUCore": 1,
  "convsize": 85,
  "minDefocus": 0.25,
  "lowRes": 0.05,
  "ctfDownFactor": 1.0,
  "phaseShiftH": 180.0,
  "maxDefocus": 4.0,
  "phaseShiftT": 0,
  "sqliteFile": null,
  "phaseShiftS": 10.0,
  "highRes": 0.35,
  "doBasicRotave": false,
  "astigmatism": 100.0,
  "object.className": "ProtGctf",
  "windowSize": "512",
  "plotResRing": true,
  "runName": null,
  "doValidate": false,
  "_useQueue": false,
  "HighResH": 4.0,
  "inputMicrographs": "992.outputMicrographs",
  "object.comment": "",
  "HighResL": 15.0,
  "doPhShEst": 0,
  "HighResBf": 50,
  "bfactor": 150,
  "object.id": "1053",
  "phaseShiftL": 0.0,
  "EPAsmp": 4
 },
 {
  "resamplePix": true,
  "hostName": "localhost",
  "object.label": "grigoriefflab - ctffind-4",
  "runMode": 0,
  "minPhaseShift": 0.0,
  "recalculate": false,
  "numberOfMpi": 1,
  "useCtffind4": true,
  "minDefocus": 0.25,
  "lowRes": 0.05,
  "ctfDownFactor": 1.0,
  "maxDefocus": 4.0,
  "maxPhaseShift": 3.15,
  "sqliteFile": null,
  "highRes": 0.35,
  "object.comment": "",
  "astigmatism": 100.0,
  "object.className": "ProtCTFFind",
  "windowSize": "512",
  "numberOfThreads": 2,
  "runName": null,
  "_useQueue": false,
  "inputMicrographs": "992.outputMicrographs",
  "object.id": "1111",
  "findPhaseShift": 0,
  "stepPhaseShift": 0.2
 },
 {
  "doMail": false,
  "publishCmd": "",
  "object.id": "1157",
  "swapAlert": 101.0,
  "runMode": 0,
  "astigmatism": 0.2,
  "minDefocus": 1000.0,
  "object.className": "ProtMonitorSummary",
  "smtp": "smtp.fakeadress.com",
  "object.label": "scipion - monitor summary",
  "maxDefocus": 40000.0,
  "cpuAlert": 101.0,
  "emailFrom": "from@from.fakeadress.com",
  "runName": null,
  "samplingInterval": 60,
  "_useQueue": false,
  "monitorTime": 30000.0,
  "memAlert": 101.0,
  "emailTo": "to@to.fakeadress.com",
  "object.comment": "",
  "inputProtocols": ["1111", "937", "992"]
 },
 {
  "_useQueue": false,
  "db": 0,
  "object.className": "ProtMonitorISPyB",
  "visit": "em11111-1",
  "object.label": "ispyb_monitor - monitor to ISPyB 2",
  "inputProtocols": ["937", "992", "1111"],
  "runMode": 0,
  "runName": null,
  "samplingInterval": 60,
  "object.id": "1203",
  "object.comment": ""
 },
 {
  "exclusive": false,
  "localSigmaDiam": 100,
  "writeSigma": false,
  "_useQueueForJobs": true,
  "localAvgMin": -1.0,
  "inputMicrographs": "992.outputMicrographsDoseWeighted",
  "writeCC": false,
  "runMode": 0,
  "advLabel": null,
  "threshold": 0.1,
  "localSigmaCutoff": 1.2,
  "speed": 2,
  "localAvgMax": 1.0,
  "writeFilt": false,
  "invertTemplatesContrast": false,
  "object.label": "gautomatch - auto-picking",
  "angStep": 5,
  "lowPass": 30,
  "object.className": "ProtGautomatch",
  "object.comment": "",
  "preFilt": false,
  "localAvgDiam": 100,
  "runName": null,
  "_useQueue": false,
  "writeBgSub": false,
  "advanced": true,
  "prehighPass": 1000,
  "prelowPass": 8,
  "writeMsk": false,
  "highPass": 1000,
  "minDist": "400",
  "GPUId": 0,
  "writeBg": false,
  "object.id": "317",
  "particleSize": "250"
 },
 {
  "object.id": "960",
  "inputMovies": "937.outputMovies",
  "object.className": "ProtArchive",
  "object.label": "dls - DLS Archive",
  "runMode": 0,
  "runName": null,
  "_useQueue": false,
  "configuration": "/dls_sw/apps/zocalo/secrets/credentials-em-archiving.cfg",
  "object.comment": "",
  "_useQueueForJobs": false,
  "dropFileDir": "/dls/bl-misc/dropfiles2/icat/dropZone/"
 }
]
